PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Completed URL = $"https://bhampsychology.eu.qualtrics.com/jfe/form/SV_eRpJHg9Ev4xwmIC?return=fromPavlovia&PROLIFIC_PID=" + expInfo['participant']
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['PROLIFIC_PID'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'PROLIFIC_PID': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['Reorganized_Set1.csv', 'Set1.csv', 'Reorganized_Set2.csv', 'RatingScale.png', 'animal_cropped.jpg', 'cactus_cropped.png', 'clock_cropped.jpg', 'clothing_cropped.jpg', 'cone_cropped.png', 'flower_cropped.jpg', 'fruit_cropped.jpg', 'tool_cropped.jpg', 'transport_cropped.jpg', 'hairclip_cropped.png', 'key_cropped.png', 'kodak_cropped.png', 'phone_cropped.png', 'tape_cropped.png', 'Set2.csv', 'grey.png']
  Screen = 1
  Units = height
  Use version = 2022.2.0
  Window size (pixels) = [1280, 800]
  colPriority = {'mainleftcredit': 'priority.CRITICAL', 'mainrightcredit': 'priority.CRITICAL', 'mainupcredit': 'priority.CRITICAL', 'mainchosencredit': 'priority.CRITICAL', 'mainreactiontime': 'priority.CRITICAL', 'PROLIFIC_PID': 'priority.CRITICAL', 'ParticipantID': 'priority.CRITICAL', 'SelectedStimuli_File': 'priority.CRITICAL', 'FinalCredits': 'priority.CRITICAL', 'expName': 'priority.LOW'}
  color = 0.0000, 0.0000, 0.0000
  expName = OptionsStudy_v2
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Introduction
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    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        WELCOME TO THE STUDY

        The study aims to improve our understanding of how people track and respond to rewards.

        It is a computer-based experiment, followed by a set of questionnaires.
        Completing this study should take approximately 50 MINUTES.

        Press SPACE to continue.
    KeyboardComponent key_resp_30
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ParticipantInformation
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    TextComponent participantinfo
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The experiment consists of four segments:

        1. Reaction Time Calibration
        2. Learning
        3. Training
        4. Main Experiment
        You may earn up to £4 extra based on your total credits.

        After the main experiment, you'll complete some questionnaires (about 30 minutes).

        Press SPACE to continue.
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        prolificID = expInfo['participant']
        thisExp.addData('PROLIFIC_PID', prolificID)
        thisExp.addData('ParticipantID', prolificID)
        print(f"Prolific ID: {prolificID}")
    KeyboardComponent key_resp_28
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RTCalib_prompt
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Are you ready to begin the Reaction Time Calibration?

        If yes, press Y.
        If no, press N.
    KeyboardComponent key_resp_10
      allowedKeys = ['y','n']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RTCalib_Instructions
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    TextComponent text_23
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You are about to start the Reaction Time Calibration.

        You must respond as quickly as possible after seeing a RED BOX appear on the screen.

        You will use your RIGHT HAND to press the ARROW keys (← ↑ → ) on the keyboard.

        Press SPACE to continue.
    KeyboardComponent key_resp_29
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RT_Condition_Instructions
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Experiment:
        conditions = ['left', 'right', 'up']
        condition_index = 0
        current_condition = conditions[condition_index]

        # Initialize condition-specific instruction flag as a dictionary (before any routines begin)
        instruction_shown = {'left': False, 'right': False, 'up': False}
      Begin Routine:
        print(f"Current condition: {current_condition}")
        print(f"Instruction shown? {instruction_shown[current_condition]}")

        if not instruction_shown[current_condition]:
            # Set the appropriate instruction text based on the current condition
            if current_condition == 'left':
                instructionText.text = "Please press the LEFT arrow key (←) when you see the RED BOX.\nPress SPACE to continue."
            elif current_condition == 'right':
                instructionText.text = "Please press the RIGHT arrow key (→) when you see the RED BOX.\nPress SPACE to continue."
            elif current_condition == 'up':
                instructionText.text = "Please press the UP arrow key (↑) when you see the RED BOX.\nPress SPACE to continue."

            # Mark that the instruction for the current condition has been shown
            instruction_shown[current_condition] = True
            print(f"Instructions for the current condition: {current_condition}")
        else:
            # Skip this routine if instructions for the current condition have already been shown
            continueRoutine = False
      End Routine:
        # Clear all keypresses to prevent carryover to the next routine
        event.clearEvents()
    TextComponent instructionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_21
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RT_Calib
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        # define random jitter for each trial
        jitter = Math.random() * (6 - 2) + 2;

        # Define get_random_position function (compatible with JS)
        def get_random_position(box_width, box_height):
            screen_width = 1.0
            screen_height = 1.0
            box_width = 0.1
            box_height = 0.1
            x_min = (-screen_width / 2) + (box_width / 2)
            x_max = (screen_width / 2) - (box_width / 2)
            y_min = (-screen_height / 2) + (box_height / 2)
            y_max = (screen_height / 2) - (box_height / 2)
            x = Math.random() * (x_max - x_min) + x_min
            y = Math.random() * (y_max - y_min) + y_min
            return [x, y]

        # Set red box position randomly
        boxPos = get_random_position(0.1, 0.1)

        # Optionally print for debugging
        print(f"Red box position: {boxPos}")
        print(f"Jitter duration: {jitter:.2f} seconds")
    TextComponent fixationCross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text [set every repeat] = +
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    PolygonComponent redBox
      fillColor = 1.0000, -1.0000, -1.0000
      pos [set every repeat] = $boxPos
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 4.0
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    KeyboardComponent keyResponse
      allowedKeys [set every repeat] = ['left', 'right', 'l', 'r', 'up']
      forceEndRoutine = True
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 4.0
      store = first key
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    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Experiment:
        # a small buffer time (~0.001 seconds) used to avoid errors due to tiny timing mismatches
        frameTolerance = 0.001

        # Define conditions and allowed keys
        conditions = ['left', 'right', 'up']
        allowed_keys = {
            'left': ['left', 'l'],
            'right': ['right', 'r'],
            'up': ['up', 'u']
        }

        # Initialize variables
        correctTrialCount = {'left': 0, 'right': 0, 'up': 0}
        condition_index = 0
        current_condition = conditions[condition_index]
        print(f"Current condition: {current_condition}")

        # Initialize variables
        key = None
        keyResponse.keys = []
        keyResponse.rt = None

        reactionTime = None
        boxOnsetTime = None

        responseMade = False
        wrongButtonPress = False
        noResponse = False
      End Routine:
        thisExp.addData('CurrentCondition', current_condition)

        if keyResponse.keys:
            key = keyResponse.keys[0]
            reactionTime = keyResponse.rt
            print(f"Key pressed: {key}, RT: {reactionTime}s")

            # Save key and RT
            thisExp.addData('CalibKeyPressed', key)
            thisExp.addData('CalibRT', reactionTime)

            if key in allowed_keys[current_condition]:
                correctTrialCount[current_condition] += 1
                print(f"Correct key! Total correct for {current_condition}: {correctTrialCount[current_condition]}")
                wrongButtonPress = False
                noResponse = False
                thisExp.addData('CalibAccuracy', 'correct')
            else:
                wrongButtonPress = True
                print(f"Wrong key '{key}' pressed.")
                noResponse = False
                thisExp.addData('CalibAccuracy', 'false')

        else:
            print("No response given.")
            wrongButtonPress = False
            noResponse = True
            thisExp.addData('CalibKeyPressed', 'None')
            thisExp.addData('CalibRT', 'NA')
            thisExp.addData('CalibAccuracy', 'no_response_calib')

        # Transition logic
        if correctTrialCount[current_condition] >= 6:
            print(f"Condition '{current_condition}' completed with {correctTrialCount[current_condition]} correct trials.")
            condition_index += 1  # Move to the next condition

        # Update the current condition
        if condition_index < len(conditions):
            current_condition = conditions[condition_index]
            print(f"Switching to condition: {current_condition}")
        else:
            print("All conditions completed. Ending Reaction Time Calibration.")
            RTloop.finished = True
  Routine RT_WarningText
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    TextComponent warningText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $warningText.text
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        if wrongButtonPress:
            warningText.text = "Wrong button press! \nPlease follow the instructions."
        elif noResponse:
            warningText.text = "No response! \nPlease press the required key when you see the RED BOX."
        else:
            warningText.text = ""  # Do not show any text if the response was correct
        print(f"Warning text shown: {warningText.text}")
      End Routine:
        # End Routine
        wrongButtonPress = False
        noResponse = False
  Routine RT_End
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    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Reaction Time Calibration has now finished.

        You will start  the LEARNING part now.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Initialization
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # running locally
        # import random

        # Randomly select the stimuli set
        #stimuli_file = random(['Set1.csv', 'Set2.csv'])

        # Save values for output file
        thisExp.addData('ProlificID', expInfo['PROLIFIC_PID'])
        thisExp.addData('ParticipantID', expInfo['participant'])

        # Randomly select the stimuli set
        stimuli_sets = ['Set1.csv', 'Set2.csv']
        stimuli_file = stimuli_sets[int(random() * len(stimuli_sets))]

        # use the reorganized trial schedule version for the main exp -
        if stimuli_file == 'Set1.csv':
            main_exp_file = 'Reorganized_Set1.csv'
        else:
            main_exp_file = 'Reorganized_Set2.csv'

        thisExp.addData('SelectedStimuli_File', stimuli_file)
        thisExp.addData('MainExp_File', main_exp_file)
  Routine TrainingPrompt
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    TextComponent prompt2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Are you ready to begin the Learning Part?

        If yes, press Y.
        If no, press N.
    KeyboardComponent key_resp_3
      allowedKeys = ['y','n']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TrainingInstructions
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    TextComponent TrainingInstruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The Learning part consists of 21 trials.
        In each one, you’ll choose between two images. Each image gives a certain number of credits, which count toward your final bonus.

        Use the LEFT ARROW (←) key to choose the left image, and the RIGHT ARROW (→) to choose the right one.

        You’ll have 4 seconds to make your choice. If you don’t choose in time, the image with lower credits will be picked automatically.

        Press SPACE to proceed.
    KeyboardComponent key_resp_2
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ComprehensionTraining1
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which key do you press to select the left image?

        (A) Left arrow
        (B) Right arrow
        (C) Up arrow
    KeyboardComponent key_resp_23
      allowedKeys = ['a','b','c']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ComprehensionTraining2
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    TextComponent comprehension_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        What happens if you fail to make a choice within the given time?

        (A) Random image is selected.
        (B) Lower credit image is selected.
        (C) Higher credit image is selected.
    KeyboardComponent key_resp_22
      allowedKeys = ['a', 'b', 'c']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ComprehensionTraining3
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    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How many seconds do you have to make a choice in the Learning part?

        (A) 2 seconds
        (B) 4 seconds
        (C) 6 seconds
    KeyboardComponent key_resp_24
      allowedKeys = ['a','b','c']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ComprehensionTrainingFeedback
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    TextComponent comprehensiontrainingfeedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_25
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        # Correct answers for the questions
        correct_answers = {'key_resp_23': 'a', 'key_resp_22': 'b', 'key_resp_24': 'b'}


        # Check if all answers are correct
        responses = [key_resp_23.keys, key_resp_22.keys, key_resp_24.keys]
        correct = [responses[0] == correct_answers['key_resp_23'],
                   responses[1] == correct_answers['key_resp_22'],
                   responses[2] == correct_answers['key_resp_24']]

        # Log each response to the data file
        thisExp.addData('resp_q1', responses['key_resp_23'])
        thisExp.addData('resp_q2', responses['key_resp_22'])
        thisExp.addData('resp_q3', responses['key_resp_24'])

        # Create feedback message
        if sum(correct) == len(correct):  # This replaces `all(correct)`
            comprehensiontrainingfeedback.text = "All answers are correct! \nPress SPACE to continue."
            comprehension_correct = True
        else:
            comprehensiontrainingfeedback.text = "Some answers are incorrect. \nPlease press SPACE to try again."
            comprehension_correct = False
      End Routine:
        # Exit the loop if all answers are correct
        if comprehension_correct:
            comprehensiontrainingloop.finished = True
  Routine FixationCross
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    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Training
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    ImageComponent leftImage
      image [set every repeat] = $image1
      pos = (-0.3, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    ImageComponent rightImage
      image [set every repeat] = $image2
      pos = (0.3, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    KeyboardComponent choice
      allowedKeys = ['left','right']
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.0
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    TextComponent creditCounterTraining
      letterHeight = 0.03
      pos = (-0.65, 0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $"Total Credits: " + str(creditsEarnedTraining)
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    CodeComponent autoSelect
      Code Type = Auto->JS
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      Begin Experiment:
        # Load stimuli set (Set1 or Set2)
        thisExp.addData('stimuli_set', stimuli_file)
        print(f"Randomly assigned stimuli set: {stimuli_file}")

        # Track total correct choices during training
        correct_trials_training = 0
        total_trials_training = 0

        # Initialize variables
        response_made_training = False
        selected_image = None
        selected_credits = 0
        autoselection_training  = False

        creditsEarnedTraining = 0

        choice.keys = []
        choice.rt = None

        # Initialize RT clock for training
        rt_clock_training = core.Clock()
      Begin Routine:
        print("Training")

        if TrainingTrials.thisN == 0:  # Shuffle trials manually
            shuffled_trials = TrainingTrials.trialList.slice()
            shuffle(shuffled_trials)
            TrainingTrials.trialList = shuffled_trials

        console.log(TrainingTrials.trialList);

        current_training_trial = TrainingTrials.trialList[TrainingTrials.thisN]

        image1file = current_training_trial['image1']
        image2file = current_training_trial['image2']

        credit1t = int(current_training_trial['credit1'])
        credit2t = int(current_training_trial['credit2'])

        # Default image assignment
        leftImage.setImage(image1file)
        rightImage.setImage(image2file)

        leftTrainingimage = image1file
        rightTrainingimage = image2file

        should_swap = Math.random() > 0.5

        if should_swap:
            leftImage.setImage(image2file)
            rightImage.setImage(image1file)
            credit1t, credit2t = credit2t, credit1t
            leftTrainingimage = image2file
            rightTrainingimage = image1file
            print("Randomly swapped images and credits: left <-> right ")

        # Debugging
        print(f"Trial {TrainingTrials.thisN + 1}: Left = {leftImage.image}, Right = {rightImage.image}")
        print(f"Trial {TrainingTrials.thisN + 1}: {TrainingTrials.trialList[TrainingTrials.thisN]}")

        response_made_training = False

        rt_clock_training.reset()
      Each Frame:
        print(response_made_training)

        keys_training = choice.keys

        # Check for participant response
        if keys_training:

            response_made_training = True
            autoselection_training  = False
            print(f"Keys detected: {keys_training}")

            if 'left' in keys_training or 'l' in keys_training:
                selected_image = leftTrainingimage
                selected_credits = credit1t

            elif 'right' in keys_training or 'r' in keys_training:
                selected_image = rightTrainingimage
                selected_credits = credit2t

            print(f"Image: {selected_image}, Credit: {int(selected_credits)}")
      End Routine:
        # If no response within 4s (auto-selection)
        if response_made_training == False:
            autoselection_training  = True
            print(f"No response within time. Auto-selection applied.")
            if credit1t < credit2t:
                selected_image = leftTrainingimage
                selected_credits = credit1t
            else:
                selected_image = rightTrainingimage
                selected_credits = credit2t
            print(f"Auto-selected image: {selected_image}, Credit: {int(selected_credits)}")

        # Check if they selected the correct image
        if selected_credits == max(credit1t, credit2t):
            correctchoice_training = 1
        else:
            correctchoice_training = 0

        # But only count it if they responded manually (NOT auto-selected)
        if response_made_training and correctchoice_training == 1:
            correct_trials_training += 1  # Increment correct responses manually made
        total_trials_training += 1  # Count all trials

        # Save whether this trial was correct
        thisExp.addData('correctchoice_training', int(correctchoice_training))

        # Log all image options shown in the trial
        thisExp.addData('LeftImageTraining', leftTrainingimage)
        thisExp.addData('RightImageTraining', rightTrainingimage)

        thisExp.addData('leftcreditTraining', int(credit1t))
        thisExp.addData('rightcreditTraining', int(credit2t))

        # Log data
        thisExp.addData('SelectedImageTraining', selected_image)
        thisExp.addData('SelectedCreditTraining', int(selected_credits))
        thisExp.addData('reaction_time_training', choice.rt if choice.rt else "No response")

        thisExp.addData('AutoSelectedTraining', autoselection_training)

        # Update the total credits earned
        creditsEarnedTraining += selected_credits
        thisExp.addData('CreditsTraining', creditsEarnedTraining)

        # Debugging
        print(f"Total Credits Earned So Far: {int(creditsEarnedTraining)}")
  Routine TrainingFeedback
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    ImageComponent selectedImage
      image [set every repeat] = $selected_image
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent creditsText
      letterHeight = 0.05
      pos = (0, -0.37)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $creditsText.text
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    TextComponent creditCounterTraining_2
      letterHeight = 0.03
      pos = (-0.65, 0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $"Total Credits: " + str(creditsEarnedTraining)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Auto-selection or participant-made response
        if response_made_training: # Participant made a response in time
            creditsText.text = f"+ {int(selected_credits)} credits"
            print(f"Learning Part selected image: {selected_image} with {int(selected_credits)} credits.")

        if autoselection_training == True:
            creditsText.text = f"No option chosen within 4 seconds. \nLowest reward (+ {int(selected_credits)} credits) automatically selected."
            print(f"Learning Part AUTO-selected image: {selected_image} with {int(selected_credits)} credits.")
  Routine TrainingCredits
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    TextComponent TrainingTotalCredits
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        TrainingTotalCredits.text = ""
      Begin Routine:
        print(f"Training Credits: {creditsEarnedTraining}")
        TrainingTotalCredits.text = f"Learning has now finished. \nYou earned {creditsEarnedTraining} credits during learning. \nPress SPACE to continue."
      End Routine:
        thisExp.addData('FinalCreditsTraining', creditsEarnedTraining)

        # Calculate training accuracy
        if total_trials_training > 0:
            training_accuracy = correct_trials_training / total_trials_training
            thisExp.addData('TrainingAccuracy', training_accuracy)
            print(f"Training completed. Accuracy: {training_accuracy*100:.2f}% ({correct_trials_training}/{total_trials_training} correct)")
        else:
            thisExp.addData('TrainingAccuracy', 0)
            print("Training completed, but no manual trials were responded.")
  Routine TrainingEnd
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    TextComponent text_28
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The Learning has now finished.

        You will start  the Training now.

        Press SPACE to continue.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CheckPhasePrompt
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Are you ready to begin the Training?

        If yes, press Y.
        If no, press N.
    KeyboardComponent key_resp_5
      allowedKeys = ['y','n']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CheckPhaseInstructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are now starting the Training!

        In the Training, you must choose the image with the higher credit on each trial. You must use LEFT ARROW (←) and RIGHT ARROW (→) keys to make selections with your RIGHT HAND.

        In this part, credits cannot be won as this is only to to assess your learning of the images before the Main Experiment begins.

        Once you reach 18 correct responses, this part will end automatically.

        Press SPACE to continue.
    KeyboardComponent key_resp_6
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine CheckPhase
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    ImageComponent left
      image [set every repeat] = $image1
      pos = (-0.3, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    ImageComponent right
      image [set every repeat] = $image2
      pos = (0.3, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    KeyboardComponent response
      allowedKeys = ['left','right', 'l', 'r']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        # Load the set randomly selected at the start
        thisExp.addData('stimuli_file', stimuli_file)

        # Initialize variables
        response_made_check = False

        CPfeedbackText = ""

        correct_responses_cp = 0
        incorrect_responses_cp = 0

        check_phase_completed = False
        check_phase_failed = False

        # Initialize RT clock
        rt_clock_check = core.Clock()
        response.keys = []
        response.rt = None

        # initialize variables for recycling incorrect trials
        incorrect_trials = []  # List to store incorrect trials
        all_trials = []  # List to store all original trials
        recycled_index = 0  # Custom counter for recycled trials
      Begin Routine:
        print(f"Check Phase started")
        print(f"Randomly assigned stimuli set: {stimuli_file}")

        # Clear and reset previous responses
        response_made_check = False

        # Start RT clock
        rt_clock_check.reset()

        #####
        if CheckPhaseTrials.thisN == 0:  # Shuffle trials manually
            shuffled_trials = CheckPhaseTrials.trialList.slice()
            shuffle(shuffled_trials)
            CheckPhaseTrials.trialList = shuffled_trials

        # At the beginning of the first trial, to store the original trial list
        if CheckPhaseTrials.thisN == 0:  # Only run once at the start of the loop
            all_trials = CheckPhaseTrials.trialList.slice()  # Save the original trial list

        # Assign credits and images
        left.setImage(CheckPhaseTrials.trialList[CheckPhaseTrials.thisN]['image1'])
        right.setImage(CheckPhaseTrials.trialList[CheckPhaseTrials.thisN]['image2'])

        # corresponding credits
        firstcredit = int(CheckPhaseTrials.trialList[CheckPhaseTrials.thisN]['credit1'])
        secondcredit = int(CheckPhaseTrials.trialList[CheckPhaseTrials.thisN]['credit2'])

        # Randomly swap left and right images for the current trial
        should_swap = Math.random() > 0.5  # Online version (JavaScript)

        if should_swap:
            left.image, right.image = right.image, left.image
            firstcredit, secondcredit = secondcredit, firstcredit
            print("Randomly swapped images and credits: left <-> right ")
      End Routine:
        # Check if a response was made
        if response.keys:
            response_made_check = True
            # Check if choice matches the higher credit image
            if (response.keys == 'left' or response.keys == 'l') and firstcredit > secondcredit:
                CPfeedbackText = "Correct"
                correct_responses_cp += 1
                print(f"Feedback set to: Correct, selected image: {left.image}")
            elif (response.keys == 'right' or response.keys == 'r') and secondcredit > firstcredit:
                CPfeedbackText = "Correct"
                correct_responses_cp += 1
                print(f"Feedback set to:Correct, selected image: {right.image}")
            else:
                CPfeedbackText = "Incorrect"
                incorrect_responses_cp += 1
                incorrect_trials.append(CheckPhaseTrials.trialList[CheckPhaseTrials.thisN])  # Recycle this trial
                print(f"Feedback set to: Incorrect. Trial recycled (incorrect response): {CheckPhaseTrials.trialList[CheckPhaseTrials.thisN]}")
        else:
            # No response made within 4 seconds
            response_made_check = False
            incorrect_responses_cp += 1
            CPfeedbackText = "No response within time. Please make a choice within 4 seconds."
            incorrect_trials.append(CheckPhaseTrials.trialList[CheckPhaseTrials.thisN])  # Recycle this trial
            print(f"Trial recycled (incorrect response): {CheckPhaseTrials.trialList[CheckPhaseTrials.thisN]}")

        # Recycle incorrect trials if all original trials are exhausted
        if CheckPhaseTrials.thisN == len(all_trials) - 1 and len(incorrect_trials) > 0:
            CheckPhaseTrials.trialList = CheckPhaseTrials.trialList.concat(incorrect_trials)  # Get incorrect trials back
            print(f"Incorrect trials added back to trial list: {incorrect_trials}")
            incorrect_trials = []  # Reset the incorrect trials list

        if correct_responses_cp >= 18:
            check_phase_completed = True
            CheckPhaseTrials.finished = True
            continueRoutine = False
            print("Check phase complete: 18 correct responses reached.")
        elif CheckPhaseTrials.thisN >= 36 and correct_responses_cp < 18:
            check_phase_failed = True
            CheckPhaseTrials.finished = True
            continueRoutine = False
            print("Check phase failed: 36 trials used without reaching 18 correct.")

        # Calculate total trials and accuracy
        total_trials_cp = correct_responses_cp + incorrect_responses_cp
        accuracy_cp = correct_responses_cp / total_trials_cp

        print("Correct Responses count:", correct_responses_cp)
        print("Incorrect Responses count:", incorrect_responses_cp)

        # Log total trials and accuracy at Check Phase
        thisExp.addData('CheckPhase_TotalTrials', total_trials_cp)
        thisExp.addData('CheckPhase_Accuracy', accuracy_cp)

        # Log trial data
        thisExp.addData('LeftImageCP', left.image)
        thisExp.addData('RightImageCP', right.image)
        thisExp.addData('leftCPcredit', firstcredit)
        thisExp.addData('rightCPcredit', secondcredit)

        thisExp.addData('reaction_time_cp', response.rt)
        thisExp.addData('key_cp', response.keys)

        thisExp.addData("CorrectCheckPhaseResponses", correct_responses_cp)
        thisExp.addData("IncorrectCheckPhaseResponses", incorrect_responses_cp)
  Routine CheckPhaseFeedback
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        feedback_text.text = CPfeedbackText
        print(f"Check Phase feedback: {CPfeedbackText}")
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $CPfeedbackText
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  Routine CheckPhaseEnd
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Training has now finished.

        You will start  the MAIN EXPERIMENT now.

        Press SPACE to continue.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_22
      Code Type = Auto->JS
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      End Routine:
        print(f"Check Phase completed in {total_trials_cp} trials with {accuracy_cp*100:.2f}% accuracy.")
  Routine MainPrompt
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Are you ready to begin the Main Experiment?

        If yes, press Y.
        If no, press N.
    KeyboardComponent key_resp_7
      allowedKeys = ['y','n']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MainInstructions
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    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You are about to start the Main Experiment!

        The experiment consists of 8 blocks of 20 trials.
        You will again be offered a choice between previously learned images, which corresponds to an amount of credits that will count towards the final bonus payment.

        Choices will consist of two or three options, selected using the LEFT (←), RIGHT (→) and UP (↑) arrow keys on the keyboard using your RIGHT HAND.

        You will have 2.5 seconds to make your choice, otherwise the lowest value option will be automatically selected.

        Press SPACE to proceed.
    KeyboardComponent key_resp_8
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ComprehensionCheckMain1
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    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        How many seconds do you have to make a choice in the main experiment ?

        (A) 1 second
        (B) 2.5 seconds
        (C) 4 seconds
    KeyboardComponent key_resp_26
      allowedKeys = ['a','b','c']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ComprehensionCheckMain2
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    TextComponent text_26
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Which key do you press to select the left image?

        (A) Left arrow
        (B) Right arrow
        (C) Up arrow
    KeyboardComponent key_resp_33
      allowedKeys = ['a','b','c']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine comprehensionresult
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    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_34
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_32
      Code Type = Auto->JS
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      Begin Experiment:
        comprehension_main_correct = False
      Begin Routine:
        # Correct answers for the questions
        correct_answers_main = {'key_resp_26':'b', 'key_resp_33':'a'}

        # Check if all answers are correct
        responses_main = [key_resp_26.keys, key_resp_33.keys]
        correct_main = [responses_main[0] == correct_answers_main['key_resp_26'], responses_main[1] == correct_answers_main['key_resp_33']]

        # Create feedback message
        if sum(correct_main) == len(correct_main):
            text_27.text = "All answers are correct! Press SPACE to continue."
            comprehension_main_correct = True
        else:
            text_27.text = "Some answers are incorrect. Please press SPACE to try again."
            comprehension_main_correct = False
      End Routine:
        # Exit the loop if all answers are correct
        if comprehension_main_correct:
            comprehensionloop.finished = True
  Routine Blocks
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Experiment:
        blockNumber = 1  # Start with Block 1
        trialCount = 0

        # Define the number of trials per block
        blockSizes = [20, 21, 20, 21, 20, 21, 20, 21]  # 8 blocks in total
        currentBlockSize = blockSizes[blockNumber - 1]  # Set the size for Block 1
      Begin Routine:
        if trialCount < currentBlockSize:  # If the block isn't finished, skip the break
            continueRoutine = False  # Skip this break screen
        else:
            trialCount = 0  # Reset trial count for the next block
            blockNumber += 1  # Move to the next one

            if blockNumber <= len(blockSizes):  # Ensure we don't go beyond the last block
                #blockNumber += 1  # Move to the next block
                currentBlockSize = blockSizes[blockNumber - 1]  # Update trial count for the next block

            print(f"Starting Block {blockNumber}")
    TextComponent blockText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Starting Block " + str(blockNumber) + ". Press SPACE to continue."
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    KeyboardComponent key_resp_9
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MainExp
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Experiment:
        # initialize lists
        shuffled_trials = []
        attention_check_trials = []
        regular_trials = []
        attention_trial = []
        blocks = []
        block_size = 20
        start_idx = 0
        end_idx = 0


        correct_trials_main = 0  # Correct choices during main experiment
        total_trials_main = 0    # Total manually responded trials
      Begin Routine:
        if MainExpTrials.thisN == 0:  # execute only once at the start
            attention_check_trials = []
            regular_trials = []

            # Separate regular trials and attention check trials
            for trial in MainExpTrials.trialList:
                if 'text_attention' in trial and trial['text_attention'] == 1:
                    attention_check_trials.append(trial)
                else:
                    regular_trials.append(trial)

            print(f"Number of regular trials: {len(regular_trials)}")
            print(f"Number of attention check trials: {len(attention_check_trials)}")

            # Shuffle regular trials
            shuffle(regular_trials)
            print(f"Regular trials shuffled, number of regular trials: {len(regular_trials)}")

            blocks = []
            attention_check_counter = 0
            block_size = 20

            for block_num in range(8):
                block = []

                print(f"Block size = {block_size}")

                # Assign regular trials
                start_idx = block_num * block_size
                end_idx = min((block_num + 1) * block_size, len(regular_trials))
                block = regular_trials[start_idx:end_idx]

                print(f"Block {block_num + 1} | start_idx = {start_idx}, end_idx = {end_idx}")
                print(f"Block {block_num + 1}: {len(block)} regular trials assigned.")

                # Add attention check trials to Blocks 2, 4, 6, 8
                if block_num % 2 == 1 and attention_check_counter < len(attention_check_trials):
                    attention_trial = attention_check_trials[attention_check_counter]
                    attention_check_counter += 1
                    block.append(attention_trial)
                    print(f"Added attention trial to Block {block_num + 1}")

                shuffle(block)
                print(f"Block {block_num + 1} shuffled.")

                # Append only non-empty blocks
                if len(block) > 0:
                    blocks.append(block)
                else:
                    print(f"Warning: Block {block_num + 1} is empty, skipping.")

            # Flatten all blocks into shuffled_trials
            shuffled_trials = []

            print(f"Before adding blocks: shuffled_trials contains {len(shuffled_trials)} trials")

            block_number = 1

            for block in blocks:
                if len(block) > 0:
                    print(f"Adding {len(block)} trials from Block {block_number} to shuffled_trials.")
                    for trial in block: # Add trials one by one because of the errors
                        shuffled_trials.append(trial)
                else:
                    print(f"Warning: Block {block_number} is empty, skipping.")
                block_number += 1

            print(f"After adding blocks: shuffled_trials contains {len(shuffled_trials)} trials")

            # add this step - Ensure no `None` trials exist because of js error
            shuffled_trials = [trial for trial in shuffled_trials if trial is not None]

            print(f"After filtering: shuffled_trials contains {len(shuffled_trials)} trials")

            # Check the final trial count just in case
            if len(shuffled_trials) != 164:
                print(f"ERROR: Expected 164 trials, but found {len(shuffled_trials)}!")

            # Assign shuffled trials back to exp
            MainExpTrials.trialList = shuffled_trials

        print(f"Final Trial List contains {len(MainExpTrials.trialList)} trials.")

        # Attention trials
        if MainExpTrials.thisTrialN is not None and MainExpTrials.thisTrialN < len(MainExpTrials.trialList):
            current_trial = MainExpTrials.trialList[MainExpTrials.thisTrialN]  # Get current trial

            if 'text_attention' in current_trial and current_trial['text_attention'] == 1:
                attention_text = "SELECT THE IMAGE ON THE RIGHT"
            else:
                attention_text = ""  # No attention text for regular trials

            print(f"Is trial {MainExpTrials.thisTrialN} an attention check trial?: {attention_text}")
        else:
            print(f"WARNING: Trial index {MainExpTrials.thisTrialN} is out of range!")
      End Routine:
        thisExp.addData('attention', current_trial['text_attention'])
    TextComponent attention
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 0.06
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text [set every repeat]:
        $attention_text
    ImageComponent leftimage
      image [set every repeat] = $image1
      pos = (-0.3, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent rightimage
      image [set every repeat] = $image2
      pos = (0.3, -0.3)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent upperimage
      image [set every repeat] = $image3
      pos = (0, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent selection
      allowedKeys = ['left','right','up','l','r']
      durationEstim = 2.5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent creditCounterMain
      letterHeight = 0.03
      pos = (-0.65, 0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $"Total Credits: " + str(creditsEarned)
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize variables
        creditsEarned = 0  # Total credits during main exp
        response_made = False
        chosenimage = "grey.png"
        chosencredit = 0
        totalCredits= 0

        auto_selection = False # Tracking auto-selection status?

        attention_text = ""

        rt_clock = core.Clock()

        selection.keys = []
        selection.rt = None

        # initialize variable in case of timeout
        timed_out_trials = []

        # Initialize a set for unique stimuli choices
        # unique_stimuli = []

        # Define a compatibility flag
        #is_online = 'psychoJS' in globals()
      Begin Routine:
        # Reset clock at the start of each trial
        rt_clock.reset()

        # Check if trial list is valid
        if MainExpTrials.trialList and 0 <= MainExpTrials.thisN < len(MainExpTrials.trialList):
            current_trial = MainExpTrials.trialList[MainExpTrials.thisN]
            print(f"Current Trial Index: {MainExpTrials.thisN}")
        else:
            print("Error: Trial list is empty or thisN is out of range!")

        # Assign images
        leftimage.setImage(current_trial['image1'])
        rightimage.setImage(current_trial['image2'])
        if 'image3' in current_trial and current_trial['image3']:
            upperimage.setImage(current_trial['image3'])
        else:
            upperimage.setImage("grey.png")  # 2-image trials

        # Assign credits
        creditfirst = int(current_trial['credit1'])
        creditsecond = int(current_trial['credit2'])
        creditthird = int(current_trial['credit3'])

        # Detect whether it’s a 2-image or 3-image trial
        is_three_image_trial = 'image3' in current_trial and current_trial['image3'] not in ["grey.png", None, ""]
        two_image_trial = 'image3' in current_trial and current_trial['image3'] in ["grey.png", None, ""]

        print(f"Assigned credits - First: {creditfirst}, Second: {creditsecond}, Third: {creditthird}")

        # Randomly swap left and right images
        should_swap = random() > 0.5
        if two_image_trial and should_swap:
            leftimage.image, rightimage.image = rightimage.image, leftimage.image
            creditfirst, creditsecond = creditsecond, creditfirst
            print("Randomly swapped left and right images for 2-image trial.")

        # For 3-image trials, shuffle all 3 positions
        if is_three_image_trial:
            print("Shuffling images for a 3-image trial.")

            positions = [
                (leftimage.image, creditfirst),
                (rightimage.image, creditsecond),
                (upperimage.image, creditthird)
            ]

            shuffle(positions)

            leftimage.setImage(positions[0][0])
            rightimage.setImage(positions[1][0])
            upperimage.setImage(positions[2][0])

            creditfirst, creditsecond, creditthird = positions[0][1], positions[1][1], positions[2][1]

            print(f"Shuffled Images: Left = {leftimage.image}, Right = {rightimage.image}, Upper = {upperimage.image}")

        # Trials with the rating scale according to the condition file
        if 'is_rating_trial' in current_trial:
            show_rating = current_trial['is_rating_trial']
        else:
            show_rating = False

        print(f"Is it a rating scale trial?: {show_rating}")

        # Logging trial start time
        trial_start_time = globalClock.getTime()
        thisExp.addData('trialStart', trial_start_time)

        # Logging stimulus display time
        stimulus_start_time = t
        thisExp.addData('stimulusStart', stimulus_start_time)

        response_made = False
      Each Frame:
        print(response_made)
        keys = selection.keys

        if keys:
            response_made = True
            print(f"Keys detected: {keys}")

            if 'left' in keys or 'l' in keys:
                chosenimage = leftimage.image
                chosencredit = creditfirst
            elif 'right' in keys or 'r' in keys:
                chosenimage = rightimage.image
                chosencredit = creditsecond
            elif 'up' in keys or 'u' in keys and upperimage.image:
                chosenimage = upperimage.image
                chosencredit = creditthird

            print(f"Chosen image: {chosenimage}, Credit: {int(chosencredit)}")
      End Routine:
        # If no response within 2.5s (auto-selection)
        if response_made == False:
            print("No response within 2.5 seconds. Auto-selection applied.")

            if is_three_image_trial:  # 3-image trial
                print("Auto-selection for a 3-image trial.")

                creditz = [int(creditfirst), int(creditsecond), int(creditthird)]
                images = [leftimage.image, rightimage.image, upperimage.image]
                print(f"Credits on this auto-selection trial: {creditz}")
                print(f"Images on this auto-selection trial: {images}")

                # Find minimum credit and its index
                min_credit = Math.min(*creditz)
                min_index = creditz.index(min_credit)

                chosenimage = images[min_index]
                chosencredit = creditz[min_index]

                print(f"Minimum credit image automatically chosen: {chosenimage}")
                print(f"Minimum credit automatically chosen: {chosencredit}")

            elif two_image_trial:  # 2-image trial
                print("Auto-selection for a 2-image trial.")

                if creditfirst < creditsecond:
                    chosenimage = leftimage.image
                    chosencredit = int(creditfirst)
                else:
                    chosenimage = rightimage.image
                    chosencredit = int(creditsecond)

                print(f"Auto-selected image: {chosenimage}, Credit: {chosencredit}")

        if two_image_trial and chosenimage == "grey.png":
            print("⚠️ WARNING: grey.png was selected — this shouldn't happen in 2-image trials!")

        trialCount += 1

        # Update total credits (not including the training)
        if chosencredit:
            creditsEarned += int(chosencredit)
            print(f"Total Credits Updated: {int(creditsEarned)}")
        else:
            print("Error: credits not updated")

        # Determine correct response based on highest credit
        if chosencredit == max([credit for credit in [credit1, credit2, credit3] if credit is not None]):
            correctchoice = 1
            print("The image with the highest credit was chosen.")
        else:
            correctchoice = 0

        # --- Update accuracy tracking ---
        if response_made:  # Only count manual responses (not auto-selections)
            total_trials_main += 1
            if correctchoice == 1:
                correct_trials_main += 1
        else:
            print("Auto-selected trial, not counted for accuracy.")

        # Log correct/incorrect responses
        thisExp.addData('CorrectResponseMain', correctchoice)

        # Log trial data
        thisExp.addData('mainleftcredit', int(creditfirst))
        thisExp.addData('mainrightcredit', int(creditsecond))
        thisExp.addData('mainthirdcredit', int(creditthird))

        thisExp.addData('mainchosenimage', chosenimage)
        thisExp.addData('mainchosencredit', int(chosencredit))

        thisExp.addData('mainselectedkey', selection.keys)
        thisExp.addData('mainreactiontime', selection.rt if response_made else "Auto-selected")

        thisExp.addData('ShowRating', show_rating)

        thisExp.addData('autoselectedtrial', auto_selection)
        thisExp.addData('response_made', response_made) # Transfer response_made status to mainexpfeedback routine?>

        # Add chosen image to the set of unique stimuli
        #if chosenimage not in unique_stimuli:
            #unique_stimuli.add(chosenimage)
            #print(f"New unique stimulus chosen: {chosenimage}")

        #thisExp.addData('UniqueStimuliCount', len(unique_stimuli))

        # Determine if it's a 2-image trial (store grey.png explicitly)
        image3_to_store = "grey.png" if not is_three_image_trial else upperimage.image
        credit3_to_store = 0 if not is_three_image_trial else creditthird

        # Logging auto-selected trials for reuse in the recovery routine
        if not response_made:
            timed_out_trials.append({
                'image1':leftimage.image,
                'image2': rightimage.image,
                'image3': image3_to_store,
                'credit1': creditfirst,
                'credit2': creditsecond,
                'credit3': credit3_to_store,
            })
            print(f"Auto-selected trial stored: {timed_out_trials[-1]}")

        thisExp.addData('timed_out_trials', timed_out_trials)
        print(f"Timed-out trials: {timed_out_trials}")
        thisExp.addData('timedOutTrialsCount', len(timed_out_trials))

        # Transition to the Recovery Loop (only if there are timed-out trials)
        # Final trial check
        if MainExpTrials.thisN == len(MainExpTrials.trialList) - 1:
            print("MainExp completed. Ending MainExpTrials loop. Preparing for Recovery Loop.")
            # Ensuring all timed-out trials are prepared for the recovery routine
            MainExpTrials.finished = True  # End the loop
  Routine MainExpFeedback
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    ImageComponent decisionImage
      image [set every repeat] = $chosenimage
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_15
      letterHeight = 0.05
      pos = (0, -0.37)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text [set every repeat]:
        $text_15.text
    TextComponent creditCounter
      letterHeight = 0.03
      pos = (-0.65, 0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $"Total Credits: " + str(creditsEarned)
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if response_made: # Participant made a response in time
            text_15.text = f"+ {int(chosencredit)} credits"
            print(f"Participant feedback: {chosenimage} with {int(chosencredit)} credits.")
        else:
            text_15.text = f"No option chosen within 2.5 seconds. \nLowest reward (+ {int(chosencredit)} credits) automatically selected."
            print(f"Auto-selection feedback: {chosenimage} with {int(chosencredit)} credits.")

        # Update the  total credits counter
        creditCounter.text = f"Total Credits: {int(creditsEarned)}"
        print(f"Credits Updated: {int(creditsEarned)}")
      End Routine:
        ### Ensure feedback image is set properly
        #if chosenimage:
            #decisionImage.setImage(chosenimage)
        #else:
            #decisionImage.setImage(None)
            #print("⚠️ No valid image chosen. Feedback image cleared.")

        # Resetting variables for the next trial
        # (should this be here??? why not in the begin routine of mainexp???)
        #chosenimage = None
        #chosencredit = 0
        #response_made = False
        #auto_selection = False
  Routine Rating
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    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Experiment:
        ratingTrialCounter = 0
        slider_initialized = False
      Begin Routine:
        # Check if it is a rating trial
        if not show_rating:
            print("Skipping Rating Routine for this trial.")
            continueRoutine = False
        else:
            print("Showing Rating Routine for this trial.")

            slider_initialized = False  # Will trigger setup in Each Frame?

        if show_rating:
            ratingTrialCounter += 1
            print(f"Rating Scale trial: {ratingTrialCounter}")
    TextComponent text_13
      letterHeight = 0.04
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Please rate THE DIFFICULTY OF THE LAST TRIAL by clicking on the scale below USING YOUR MOUSE.

        After you select a rating between 0-10, press SPACE to confirm.
    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    SliderComponent difficultySlider
      forceEndRoutine = False
      granularity = 1
      labels = ['Very\neasy', 'Very\ndifficult'] 
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    CodeComponent code_12
      Code Type = Auto->JS
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      Each Frame:
        # Initialize slider only once
        if not slider_initialized:
            difficultySlider.reset()
            difficultySlider.markerPos = 5
            slider_initialized = True
            print(f"Slider starts at: {difficultySlider.markerPos}")

        # If a rating is made and space is pressed, end the routine
        if difficultySlider.getRating() is not None and 'space' in event.getKeys():
            continueRoutine = False
      End Routine:
        rating = difficultySlider.getRating()
        print(f"Rating made for this trial: {rating}")

        if rating is not None:
            thisExp.addData('Rating', int(rating))
            thisExp.addData('TrialIndex', MainExpTrials.thisN)
        else:
            thisExp.addData('Rating', 'NA')
            thisExp.addData('TrialIndex', MainExpTrials.thisN)
  Routine Recovery
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if timed_out_trials:
            print(f" Started: Timed out trials for the Recovery Loop: {timed_out_trials}")

            # Make sure index is safe
            if RecoveryLoop.thisN < n_recovery_trials:
                current_recovery_trial = timed_out_trials[RecoveryLoop.thisN]
                print(f"Processing Recovery Trial: {current_recovery_trial}")
            else:
                print("RecoveryLoop.thisN is out of bounds.")
                continueRoutine = False
                RecoveryLoop.finished = True
        else:
            print("No timed-out trials. Ending Recovery Loop.")
            RecoveryLoop.finished = True
            continueRoutine = False
    ImageComponent imageleft
      image [set every repeat] = $image1
      pos = (-0.3, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent imageright
      image [set every repeat] = $image2
      pos = (0.3, -0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent imageup
      image [set every repeat] = $image3
      pos = (0, 0.25)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent key_resp_19
      allowedKeys = ['left', 'right', 'l', 'r', 'up']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent creditCounterRecovery
      letterHeight = 0.03
      pos = (-0.65, 0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $"Total Credits: " + str(creditsEarned)
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        # Initialize variables
        response_made_recovery = False
        chosenimagerecovery = None
        chosencreditrecovery = 0

        key_resp_19.keys = []
        key_resp_19.rt = None

        rt_clock_recovery = core.Clock()
      Begin Routine:
        # Reset RT clock
        rt_clock_recovery.reset()
        response_made_recovery = False

        current_recovery_trial = timed_out_trials[RecoveryLoop.thisN]

        # Assign images from the condition file
        imageleft.setImage(current_recovery_trial['image1'])
        imageright.setImage(current_recovery_trial['image2'])
        imageup.setImage(current_recovery_trial['image3'])

        # Assign credits  (avoiding non-numeric values)
        credit1recovery = int(float(current_recovery_trial['credit1']))
        credit2recovery = int(float(current_recovery_trial['credit2']))
        credit3recovery = int(float(current_recovery_trial['credit3']))

        is_three_image_trial_recovery = current_recovery_trial['image3'] != "grey.png"
        is_two_image_trial_recovery = current_recovery_trial['image3'] == "grey.png"

        print("image3:", current_recovery_trial['image3'])
        print("Interpreted as 3-image trial?", is_three_image_trial_recovery)

        print(f"Left Image: {imageleft.image} (Credits: {credit1recovery})")
        print(f"Right Image: {imageright.image} (Credits: {credit2recovery})")
        print(f"Upper Image: {imageup.image} (Credits: {credit3recovery})")

        response_made_recovery = False
      Each Frame:
        keys_recovery = key_resp_19.keys
        print(f"Keys detected: {keys_recovery}")

        if keys_recovery:
            response_made_recovery = True
            if 'left' in keys_recovery or 'l' in keys_recovery:
                chosenimagerecovery = imageleft.image
                chosencreditrecovery = credit1recovery
            elif 'right' in keys_recovery or 'r' in keys_recovery:
                chosenimagerecovery = imageright.image
                chosencreditrecovery = credit2recovery
            elif 'up' in keys_recovery or 'u' in keys_recovery and imageup.image:
                chosenimagerecovery = imageup.image
                chosencreditrecovery = credit3recovery

            print(f"Chosen Recovery Image: {chosenimagerecovery}, Credit: {int(chosencreditrecovery)}")
      End Routine:
        # If no response within 2.5s (auto-selection)
        if response_made_recovery == False:
            print(f"No response within 2.5 seconds. Auto-selection applied.")

            if is_three_image_trial_recovery: # 3 image trial
                print("Auto-selection for a 3-image recovery trial.")
                ###
                creditz_recovery = [int(credit1recovery), int(credit2recovery), int(credit3recovery)]
                print(f"Credits on this auto-selection recovery trial: {int(creditz_recovery)}")

                images_recovery = [imageleft.image, imageright.image, imageup.image]
                print(f"Images on this recovery auto-selection trial: {images_recovery}")

                # Find the minimum credit and its index
                # (apparently this is compatible with PsychoJS)
                min_credit_recovery = Math.min(*creditz_recovery)
                print(f"Minimum credit on the recovery trial: {int(min_credit_recovery)}")
                min_index_recovery = creditz_recovery.index(min_credit_recovery)
                print(f"Index of minimum credit: {int(min_index_recovery)}")

                chosenimagerecovery = images_recovery[min_index_recovery]
                print(f"Minimum credit image automatically chosen: {chosenimagerecovery}")
                chosencreditrecovery = creditz_recovery[min_index_recovery]
                print(f"Minimum credit automatically chosen: {int(chosencreditrecovery)}")

            elif is_two_image_trial_recovery:  # 2-image trial
                print("Auto-selection for a 2-image recovery trial.")

                if credit1recovery < credit2recovery:
                    chosenimagerecovery = imageleft.image
                    chosencreditrecovery = credit1recovery
                else:
                    chosenimagerecovery = imageright.image
                    chosencreditrecovery = credit2recovery

            print(f"Auto-selected image: {chosenimagerecovery}, Credit: {int(chosencreditrecovery)}")

        if is_two_image_trial_recovery and "grey.png" in str(chosenimagerecovery):
            print("⚠️ WARNING: grey.png was selected — this shouldn't happen in 2-image trials!")

        ######
        if chosencreditrecovery:
            creditsEarned += int(chosencreditrecovery)
            print(f"Total Credits Updated: {int(creditsEarned)}")
        else:
            print("Error: credits not updated")

        # Update credits counter
        creditCounterRecovery.text = f"Total Credits: {int(creditsEarned)}"
        print(f"Credits updated after recovery trial: {int(creditsEarned)}")

        thisExp.addData('recoveryelectedkey', key_resp_19.keys)
        thisExp.addData('recoveryreactiontime', key_resp_19.rt if response_made else "Auto-selected")

        if chosenimagerecovery is not None:
            thisExp.addData('ChosenImageRecovery', str(chosenimagerecovery))
            # Log trial data
            thisExp.addData('credit1recovery', int(credit1recovery))
            thisExp.addData('credit2recovery', int(credit2recovery))
            thisExp.addData('credit3recovery', int(credit3recovery))
            thisExp.addData('ChosenCreditRecovery', int(chosencreditrecovery))
        else:
            thisExp.addData('SelectedImageRecovery', 'No image selected')

        # Log recovery trial data
        thisExp.addData('Recovery_Image1', current_recovery_trial['image1'])
        thisExp.addData('Recovery_Image2', current_recovery_trial['image2'])
        thisExp.addData('Recovery_Image3', current_recovery_trial['image3'])
  Routine RecoveryFeedback
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    ImageComponent chosenImage
      image [set every repeat] = $chosenimagerecovery
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent text_16
      letterHeight = 0.05
      pos = (0, -0.37)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $text_16.text
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    TextComponent creditCounter_2
      letterHeight = 0.03
      pos = (-0.65, 0.42)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $"Total Credits: " + str(creditsEarned)
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        # chosenImage.setImage(None)  # Reset feedback image
        # Auto-selection or participant-made response
        if not response_made_recovery:  # Auto-selection case
            text_16.text = f"No option chosen. Lowest reward (+ {int(chosencreditrecovery)} credits) automatically selected."
            print(f"Auto-selection feedback: {chosenimagerecovery} with {int(chosencreditrecovery)} credits.")
        else:  # Participant made a response
            text_16.text = f"+ {int(chosencreditrecovery)} credits"
            print(f"Participant recovery trial feedback: {chosenimagerecovery} with {int(chosencreditrecovery)} credits.")

        print(f"Credits Updated after recovery trial: {int(creditsEarned)}")
  Routine TotalCredits
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    TextComponent totaltrainingmaincredits
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_18
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Experiment:
        bonus = 0
        totaltrainingmaincredits.text = ""
      Begin Routine:
        # Sum up credits from training and main experiment
        totalCredits = creditsEarnedTraining + creditsEarned
        print(f"Total Credits: {int(totalCredits)}")


        totaltrainingmaincredits.text = f"Experiment has now finished. You won " + str(totalCredits) + " credits in the experiment. Press SPACE to continue."
      End Routine:
        # Store Main Experiment Accuracy
        main_experiment_accuracy = correct_trials_main / total_trials_main
        thisExp.addData('MainExperimentAccuracy', main_experiment_accuracy)
        print(f"Main Experiment completed. Accuracy: {main_experiment_accuracy*100:.2f}% ({correct_trials_main}/{total_trials_main} correct)")

        thisExp.addData('FinalCredits', int(totalCredits))

        # Calculate bonus amount based on total credits
        if totalCredits >= 1000:
            bonus = 4
        elif 950 <= totalCredits < 1000:
            bonus = 3
        elif 900 <= totalCredits < 950:
            bonus = 2
        elif 800 <= totalCredits < 900:
            bonus = 1
        else:
            bonus = 0

        # Store it in the data file
        thisExp.addData("BonusPayment", bonus)
  Routine END
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  Routine LeftRTInstructions
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    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please press the LEFT arrow key (←) when you see the RED BOX.

        Press SPACE to continue.
    KeyboardComponent key_resp_32
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MainInstructions2
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    ImageComponent image
      image = RatingScale.png
      pos = (0, 0.2)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
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      text:
        During the experiment you will also be asked to rate the difficulty of certain choices.

        Use the LEFT (←) and RIGHT (→) arrow keys to choose a value on the rating scale and press SPACE to confirm.

        Press SPACE to confirm.
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TimedOutTrials
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # Define number of recovery trials
        n_recovery_trials = len(timed_out_trials)
        print(f"Number of recovery trials: {n_recovery_trials}")
  Routine Introduction2
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        <b>Are there any benefits in taking part?</b>
        There will be no direct benefit to you; however, your participation may help us better understand the mechanisms underlying responses to reward in health and disease.
        You will receive financial compensation for participating in the study. You will receive £6 for finishing the task and filling out the questionnaires. And you could receive a further £4 depending on your performance (most people obtain more than half of the bonus).

        <b>Do you have to take part?</b>
        Your participation in this study is completely voluntary. You may choose to withdraw at any point during the task without any explanation or consequences. You can also request that we remove the data but please note that once the data have been included in analysis or data repositories [approximately two weeks after data was collected], it cannot be withdrawn.
    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Introduction3
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        <b>How will your data be used?</b>
        Any responses you provide will be treated confidentially. When the study is completed, the analysis of the data will be reported in an academic report. The results may be submitted for journal publication and/or presented at scientific conferences. All data will be aggregated and anonymised – in no way can any individual person be identified from the results. We would like your permission to use your anonymised data in future studies, and to share anonymised data with researchers in other labs and departments (e.g. in online databases). Files that are shared with other researchers or results that are made public will not contain any personal information that could identify you. Responsible members of the University of Birmingham may be given access to data for monitoring and/or audit of the study to ensure we are complying with guidelines, or as otherwise required by law.

        Press SPACE to continue.
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ConsentForm
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        <b>PARTICIPANT CONSENT FORM</b>

        In order to continue, you must give your consent to participate in this study.

        <b>If you agree to take part in the study,</b> please press the <b>Y</b> button on the keyboard.

        <b>If you do not agree to take part in the study,</b> please press the <b>N</b> button on the keyboard.
    KeyboardComponent consentKey
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        consent_given = False
      End Routine:
        if consentKey.keys == 'n':
            continueRoutine = False  # End the routine
            consent_given = False
        else:
            consent_given = True
  Routine NoConsent
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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      text:
        You did not consent.
        You will now be redirected to Prolific.
        Thank you for your time.
    CodeComponent code_11
      Code Type = Auto->JS
      Begin Routine:
        #Redirect to Prolific if no consent
        #window.location.href = "https://app.prolific.com/submissions/complete?cc=SORRY_NO_CONSENT";
  Routine CheckPhaseFail
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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      text:
        You did not reach the required number of correct responses.

        Unfortunately, you cannot proceed with the rest of the study.

        You will now be redirected to Prolific.

        Please click on "Leave".
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        redirect_checkphase_fail_url = f"https://app.prolific.com/submissions/complete?cc=CGWPAWW4"
      End Routine:
        window.location.href = redirect_checkphase_fail_url
  Routine nReps
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        # This ensures we use a JS-friendly version of nReps
        n_reps_checkfail = 1 if check_phase_failed else 0
  Routine Wait
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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      text:
        Saving your data, please wait…

        You will be redirected to Qualtrics to complete the questionnaires in a few seconds.
Flow
  Routine Introduction
  Routine ParticipantInformation
  Routine RTCalib_prompt
  Routine RTCalib_Instructions
  LoopInitiator RTloop loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine RT_Condition_Instructions
    Routine RT_Calib
    Routine RT_WarningText
  LoopTerminator RTloop
  Routine RT_End
  Routine Initialization
  Routine TrainingPrompt
  Routine TrainingInstructions
  LoopInitiator comprehensiontrainingloop loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine ComprehensionTraining1
    Routine ComprehensionTraining2
    Routine ComprehensionTraining3
    Routine ComprehensionTrainingFeedback
  LoopTerminator comprehensiontrainingloop
  LoopInitiator TrainingTrials loopType="TrialHandler"
    conditionsFile = $stimuli_file
    loopType = random
    nReps = 1
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    Routine FixationCross
    Routine Training
    Routine TrainingFeedback
  LoopTerminator TrainingTrials
  Routine TrainingCredits
  Routine TrainingEnd
  Routine CheckPhasePrompt
  Routine CheckPhaseInstructions
  LoopInitiator CheckPhaseTrials loopType="TrialHandler"
    conditionsFile = $stimuli_file
    loopType = random
    nReps = 36
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    Routine FixationCross
    Routine CheckPhase
    Routine CheckPhaseFeedback
  LoopTerminator CheckPhaseTrials
  Routine nReps
  LoopInitiator trials loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = n_reps_checkfail
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    Routine CheckPhaseFail
  LoopTerminator trials
  Routine CheckPhaseEnd
  Routine MainPrompt
  Routine MainInstructions
  Routine MainInstructions2
  LoopInitiator comprehensionloop loopType="TrialHandler"
    loopType = sequential
    nReps = 100
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    Routine ComprehensionCheckMain1
    Routine ComprehensionCheckMain2
    Routine comprehensionresult
  LoopTerminator comprehensionloop
  LoopInitiator MainExpTrials loopType="TrialHandler"
    conditionsFile = $main_exp_file
    loopType = sequential
    nReps = 1
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    Routine Blocks
    Routine FixationCross
    Routine MainExp
    Routine MainExpFeedback
    Routine Rating
  LoopTerminator MainExpTrials
  Routine TimedOutTrials
  LoopInitiator RecoveryLoop loopType="TrialHandler"
    loopType = sequential
    nReps = n_recovery_trials
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    Routine Recovery
    Routine RecoveryFeedback
  LoopTerminator RecoveryLoop
  Routine TotalCredits
  Routine Wait
